PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Имя_Фамилия'], expName, expInfo['date'])
  Experiment info = {'Имя_Фамилия': '', 'Пол': '', 'Возраст': '', 'group_sk_fl_neu': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/2_sk.png', 'resources/32_sk.png', 'resources/21_sk.png', 'resources/20_sk.png', 'resources/9_sk.png', 'resources/27_sk.png', 'resources/38_sk.png', 'resources/18_sk.png', 'resources/31_sk.png', 'resources/19_sk.png', 'resources/8_sk.png', 'resources/25_sk.png', 'resources/26_sk.png', 'resources/4_sk.png', 'resources/5_sk.png', 'resources/23_sk.png', 'resources/28_sk.png', 'resources/11_sk.png', 'resources/33_sk.png', 'resources/14_sk.png', 'resources/34_sk.png', 'resources/24_sk.png', 'resources/22_sk.png', 'resources/6_sk.png', 'resources/29_sk.png', 'resources/7_sk.png', 'resources/35_sk.png', 'resources/36_sk.png', 'resources/1_sk.png', 'resources/3_sk.png', 'resources/15_sk.png', 'resources/39_sk.png', 'resources/17_sk.png', 'resources/16_sk.png', 'resources/37_sk.png', 'resources/40_sk.png', 'resources/30_sk.png', 'resources/10_sk.png', 'resources/13_sk.png', 'resources/12_sk.png', 'resources/2_fl.png', 'resources/32_fl.png', 'resources/21_fl.png', 'resources/20_fl.png', 'resources/9_fl.png', 'resources/27_fl.png', 'resources/38_fl.png', 'resources/18_fl.png', 'resources/31_fl.png', 'resources/19_fl.png', 'resources/8_fl.png', 'resources/25_fl.png', 'resources/26_fl.png', 'resources/4_fl.png', 'resources/5_fl.png', 'resources/23_fl.png', 'resources/14_fl.png', 'resources/28_fl.png', 'resources/11_fl.png', 'resources/33_fl.png', 'resources/34_fl.png', 'resources/24_fl.png', 'resources/22_fl.png', 'resources/6_fl.png', 'resources/29_fl.png', 'resources/7_fl.png', 'resources/35_fl.png', 'resources/36_fl.png', 'resources/1_fl.png', 'resources/1.png', 'resources/3_fl.png', 'resources/15_fl.png', 'resources/39_fl.png', 'resources/17_fl.png', 'resources/16_fl.png', 'resources/40_fl.png', 'resources/30_fl.png', 'resources/37_fl.png', 'resources/10_fl.png', 'resources/13_fl.png', 'resources/12_fl.png', 'resources/2_neu.png', 'resources/18_neu.png', 'resources/38_neu.png', 'resources/27_neu.png', 'resources/9_neu.png', 'resources/20_neu.png', 'resources/21_neu.png', 'resources/32_neu.png', 'resources/36_neu.png', 'resources/1_neu.png', 'resources/3_neu.png', 'resources/15_neu.png', 'resources/39_neu.png', 'resources/17_neu.png', 'resources/16_neu.png', 'resources/40_neu.png', 'resources/37_neu.png', 'resources/30_neu.png', 'resources/10_neu.png', 'resources/13_neu.png', 'resources/12_neu.png', 'resources/33_neu.png', 'resources/14_neu.png', 'resources/34_neu.png', 'resources/24_neu.png', 'resources/22_neu.png', 'resources/6_neu.png', 'resources/29_neu.png', 'resources/7_neu.png', 'resources/35_neu.png', 'resources/11_neu.png', 'resources/28_neu.png', 'resources/23_neu.png', 'resources/5_neu.png', 'resources/4_neu.png', 'resources/26_neu.png', 'resources/25_neu.png', 'resources/8_neu.png', 'resources/19_neu.png', 'resources/31_neu.png']
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  color = $[0.6236, 0.6236, 0.6236]
  expName = Visual_search_sk
  keyboardBackend = PsychToolbox
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Routines
  Routine test_instr
    RoutineSettingsComponent test_instr
      saveStartStop = False
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    TextComponent test_text
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1400
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      text:
        Для ознакомления с процедурой эксперимента, мы предлагаем вам пройти серию тренировочных проб.

        Сначала перед вами появится текстовое описание приложения, которое необходимо найти. Оно будет начинаться со слов "Я бы хотел...".

        Далее вам предстоит найти иконку описанного приложения среди нескольких представленных иконок. Как только вы найдете нужную иконку, просто выберете её кликом левой кнопки мыши.

        Как только вы выберете иконку, вы узнаете корректность вашего ответа.

        Постарайтесь отвечать как можно точнее и быстрее.

        Для перехода к тренировочным пробам нажмите пробел.
    KeyboardComponent gototest
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome_instr
    RoutineSettingsComponent welcome_instr
      saveStartStop = False
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    TextComponent text
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1400
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      text:
        Спасибо, что согласились пройти наш эксперимент по исследованию восприятия цифровых интерфейсов.

        Пожалуйста, внимательно ознакомьтесь с инструкциями, прежде чем приступать к эксперименту.

        В ходе эксперимента вам необходимо будет искать приложения, с описанным функционалом среди иконок других приложений.

        Чтобы перейти к дальнейшим инструкциям, нажмите пробел.
    KeyboardComponent go_train_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine training_trial
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    ImageComponent test_image_3x3_1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_3x3_2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_3x3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_3x3_3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_3x3_4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_3x3_5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent test_image_3x3_6
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine main_instr
    RoutineSettingsComponent main_instr
      saveStartStop = False
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    TextComponent main_text
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1400
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      text:
        Вы отлично справились с тренировочным заданием.

        Теперь вам предстоит решить серию подобных заданий, с тем лишь отличием, что обратная связь по корректности ответа предоставляться не будет.

        Постарайтесь давать максимально точный и быстрый ответ.

        После окончания эксперимента обязательно дождитесь появления зеленого индикатора.

        Как только вы будете готовы начать основную часть эксперимента, нажмите пробел.
    KeyboardComponent gomain
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine main_trial
    RoutineSettingsComponent main_trial
      saveStartStop = False
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    CodeComponent code_main
      Code Type = Both
      Begin JS Routine:
        probe_list = Array.from({ length: 40 }, (_, i) => i + 1);
        probe_list.splice(probe_list.indexOf(test), 1);

        if (matrix_type == 1) {
            matrix_positions = positions_3x3;
            dist_list = getRandomSubarray(probe_list, 8);
        }
        else if (matrix_type == 2) {
                matrix_positions = positions_4x4;
                dist_list = getRandomSubarray(probe_list, 15);
        }
        else {
                matrix_positions = positions_5x5;
                dist_list = getRandomSubarray(probe_list, 24);
        }

        test_position = choose(matrix_positions);
        dist_position = matrix_positions.slice(0);

        dist_position.splice(dist_position.indexOf(test_position), 1);

        target_image= 'resources/'+test.toString() +design+'.png';
        distr1_image= 'resources/'+ dist_list[0].toString() +design+'.png';
        distr2_image= 'resources/'+ dist_list[1].toString() +design+'.png';
        distr3_image= 'resources/'+ dist_list[2].toString() +design+'.png';
        distr4_image= 'resources/'+ dist_list[3].toString() +design+'.png';
        distr5_image= 'resources/'+ dist_list[4].toString() +design+'.png';
        distr6_image= 'resources/'+ dist_list[5].toString() +design+'.png';
        distr7_image= 'resources/'+ dist_list[6].toString() +design+'.png';
        distr8_image= 'resources/'+ dist_list[7].toString() +design+'.png';

        if (matrix_type >= 2) {
            distr9_image= 'resources/'+ dist_list[8].toString() +design+'.png';
            distr10_image= 'resources/'+ dist_list[9].toString() +design+'.png';
            distr11_image= 'resources/'+ dist_list[10].toString() +design+'.png';
            distr12_image= 'resources/'+ dist_list[11].toString() +design+'.png';
            distr13_image= 'resources/'+ dist_list[12].toString() +design+'.png';
            distr14_image= 'resources/'+ dist_list[13].toString() +design+'.png';
            distr15_image= 'resources/'+ dist_list[14].toString() +design+'.png';
        }
        else {
            distr9_image= 'resources/1.png';
            distr10_image= 'resources/1.png';
            distr11_image= 'resources/1.png';
            distr12_image= 'resources/1.png';
            distr13_image= 'resources/1.png';
            distr14_image= 'resources/1.png';
            distr15_image= 'resources/1.png';
        }

        if (matrix_type >=3){
            distr16_image= 'resources/'+ dist_list[15].toString() +design+'.png';
            distr17_image= 'resources/'+ dist_list[16].toString() +design+'.png';
            distr18_image= 'resources/'+ dist_list[17].toString() +design+'.png';
            distr19_image= 'resources/'+ dist_list[18].toString() +design+'.png';
            distr20_image= 'resources/'+ dist_list[19].toString() +design+'.png';
            distr21_image= 'resources/'+ dist_list[20].toString() +design+'.png';
            distr22_image= 'resources/'+ dist_list[21].toString() +design+'.png';
            distr23_image= 'resources/'+ dist_list[22].toString() +design+'.png';
            distr24_image= 'resources/'+ dist_list[23].toString() +design+'.png';
        }
        else {
            distr16_image= 'resources/1.png';
            distr17_image= 'resources/1.png';
            distr18_image= 'resources/1.png';
            distr19_image= 'resources/1.png';
            distr20_image= 'resources/1.png';
            distr21_image= 'resources/1.png';
            distr22_image= 'resources/1.png';
            distr23_image= 'resources/1.png';
            distr24_image= 'resources/1.png';
        }

        if (matrix_type >= 2) {
            distr9_pos =[dist_position[8][0], dist_position[8][1]];
            distr10_pos =[dist_position[9][0], dist_position[9][1]];
            distr11_pos =[dist_position[10][0], dist_position[10][1]];
            distr12_pos =[dist_position[11][0], dist_position[11][1]];
            distr13_pos =[dist_position[12][0], dist_position[12][1]];
            distr14_pos =[dist_position[13][0], dist_position[13][1]];
            distr15_pos =[dist_position[14][0], dist_position[14][1]];
        }
        else {
            distr9_pos = [-960, -540];
            distr10_pos = [-960, -540];
            distr11_pos = [-960, -540];
            distr12_pos = [-960, -540];
            distr13_pos = [-960, -540];
            distr14_pos = [-960, -540];
            distr15_pos = [-960, -540];
        }

        if (matrix_type >=3){
            distr16_pos = [dist_position[15][0], dist_position[15][1]];
            distr17_pos = [dist_position[16][0], dist_position[16][1]];
            distr18_pos = [dist_position[17][0], dist_position[17][1]];
            distr19_pos = [dist_position[18][0], dist_position[18][1]];
            distr20_pos = [dist_position[19][0], dist_position[19][1]];
            distr21_pos = [dist_position[20][0], dist_position[20][1]];
            distr22_pos = [dist_position[21][0], dist_position[21][1]];
            distr23_pos = [dist_position[22][0], dist_position[22][1]];
            distr24_pos = [dist_position[23][0], dist_position[23][1]];
        }
        else {
            distr16_pos= [-0.8,-0.5];
            distr17_pos= [-0.8,-0.5];
            distr18_pos= [-0.8,-0.5];
            distr19_pos= [-0.8,-0.5];
            distr20_pos= [-0.8,-0.5];
            distr21_pos= [-0.8,-0.5];
            distr22_pos= [-0.8,-0.5];
            distr23_pos= [-0.8,-0.5];
            distr24_pos= [-0.8,-0.5];
        }
      Begin Routine:
        #Генерируем список дистракторов из всех стимулов
        probe_list = list(range(1, 41))
        probe_list.remove(test)

        #выбираем тип матрицыv и номера дистракторов
        if matrix_type == 1:
            matrix_positions = positions_3x3
            dist_list= random.sample(probe_list, 8)
        elif matrix_type == 2:
            matrix_positions = positions_4x4
            dist_list= random.sample(probe_list, 15)
        else:
            matrix_positions = positions_5x5
            dist_list= random.sample(probe_list, 24)

        #Выбираем позицию для целевого стимула
        test_position = random.choice(matrix_positions)

        #Выбираем оставляем позиции для дистракторов
        dist_position = matrix_positions[:]
        dist_position.remove(test_position)
      End JS Routine:
        psychoJS.experiment.addData("test_indicator", test_ind);
        psychoJS.experiment.addData("stim_name", names[test]);
        psychoJS.experiment.addData("stim_id", test);
        psychoJS.experiment.addData("stim_descr", instruction);
        psychoJS.experiment.addData("stim_fav", isfav[test]);
        psychoJS.experiment.addData("stim_freq", isfreq[test]);
        psychoJS.experiment.addData("matrix_type", matrix_type);
        psychoJS.experiment.addData("taget_posititon", test_position);

        test_ind_seq.splice(test_ind_seq.indexOf(test_ind), 1);
      End Routine:
        #Добавляем данные о пробе
        thisExp.addData('test_indicator', test_ind)
        thisExp.addData('stim_name', df.iloc[test-1]['name'])
        thisExp.addData('stim_id', df.iloc[test-1]['id'])
        thisExp.addData('stim_descr', instruction)
        thisExp.addData('stim_fav', df.iloc[test-1]['fav'])
        thisExp.addData('stim_freq', df.iloc[test-1]['freq'])
        thisExp.addData('matrix_type', matrix_type)
        thisExp.addData('taget_posititon', test_position)
        #Переходим к слкдующему стимулу
        test_ind_seq.remove(test_ind)
    ImageComponent target
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $target_image
      pos [set every repeat] = (test_position[0], test_position[1])
      saveStartStop = False
      size = size_pix
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent distr_1
      color = 1,1,1
      image [set every repeat] = $distr1_image
      pos [set every repeat] = (dist_position[0][0], dist_position[0][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent distr_2
      color = 1,1,1
      image [set every repeat] = $distr2_image
      pos [set every repeat] = (dist_position[1][0], dist_position[1][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent distr_3
      color = 1,1,1
      image [set every repeat] = $distr3_image
      pos [set every repeat] = (dist_position[2][0], dist_position[2][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent distr_4
      color = 1,1,1
      image [set every repeat] = $distr4_image
      pos [set every repeat] = (dist_position[3][0], dist_position[3][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent distr_5
      color = 1,1,1
      image [set every repeat] = $distr5_image
      pos [set every repeat] = (dist_position[4][0], dist_position[4][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent distr_6
      color = 1,1,1
      image [set every repeat] = $distr6_image
      pos [set every repeat] = (dist_position[5][0], dist_position[5][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent distr_7
      color = 1,1,1
      image [set every repeat] = $distr7_image
      pos [set every repeat] = (dist_position[6][0], dist_position[6][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent distr_8
      color = 1,1,1
      image [set every repeat] = $distr8_image
      pos [set every repeat] = (dist_position[7][0], dist_position[7][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent distr_9
      color = 1,1,1
      image [set every repeat] = $distr9_image
      pos [set every repeat] = distr9_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 2
      units = height
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    ImageComponent distr_10
      color = 1,1,1
      image [set every repeat] = $distr10_image
      pos [set every repeat] = distr10_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 2
      units = height
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    ImageComponent distr_11
      color = 1,1,1
      image [set every repeat] = $distr11_image
      pos [set every repeat] = distr11_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 2
      units = height
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    ImageComponent distr_12
      color = 1,1,1
      image [set every repeat] = $distr12_image
      pos [set every repeat] = distr12_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 2
      units = height
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    ImageComponent distr_13
      color = 1,1,1
      image [set every repeat] = $distr13_image
      pos [set every repeat] = distr13_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 2
      units = height
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    ImageComponent distr_14
      color = 1,1,1
      image [set every repeat] = $distr14_image
      pos [set every repeat] = distr14_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 2
      units = height
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    ImageComponent distr_15
      color = 1,1,1
      image [set every repeat] = $distr15_image
      pos [set every repeat] = distr15_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 2
      units = height
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    ImageComponent distr_16
      color = 1,1,1
      image [set every repeat] = $distr16_image
      pos [set every repeat] = distr16_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 3
      units = height
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    ImageComponent distr_17
      color = 1,1,1
      image [set every repeat] = $distr17_image
      pos [set every repeat] = distr17_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 3
      units = height
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    ImageComponent distr_18
      color = 1,1,1
      image [set every repeat] = $distr18_image
      pos [set every repeat] = distr18_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 3
      units = height
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    ImageComponent distr_19
      color = 1,1,1
      image [set every repeat] = $distr19_image
      pos [set every repeat] = distr19_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 3
      units = height
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    ImageComponent distr_20
      color = 1,1,1
      image [set every repeat] = $distr20_image
      pos [set every repeat] = distr20_pos
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 3
      units = height
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    MouseComponent chose_targ
      clickable = target, distr_1, distr_2, distr_3, distr_4, distr_5, distr_6, distr_7, distr_8, distr_9, distr_10, distr_11, distr_12, distr_13, distr_14, distr_15, distr_16, distr_17, distr_18, distr_19, distr_20, distr_21, distr_22, distr_23, distr_24
      correctAns = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name, pos
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine outro
    RoutineSettingsComponent outro
      saveStartStop = False
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    TextComponent text_2
      color = black
      letterHeight = 40
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1400
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      text:
        Спасибо за участие в эксперименте!
        Если у вас есть вопросы по поводу нашего эксперимента, обратитесь к экспериментатору, он с радостью на них ответит и выслушает вашу обратную связь.

        Для окончания эксперимента нажмите пробел и ОБЯЗАТЕЛЬНО дождитесь зеленого индикатора, прежде чем закрывать страницу.
    KeyboardComponent end_space
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine main_search_task
    RoutineSettingsComponent main_search_task
      saveStartStop = False
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    CodeComponent code1
      Code Type = Both
      Begin JS Routine:
        test_ind = choose(test_ind_seq);
        test = test_order[test_ind];
        matrix_type = matrix_seq[test_ind];
        instruction = descr_dic[test];
      Begin Routine:
        #номер целевого сстимула из списка тестовых стимулов
        test_ind = random.choice(test_ind_seq)

        #выбираем целевой стимул
        test = test_order[test_ind]
        matrix_type = matrix_seq[test_ind]
        instruction = df.iloc[test-1]['descr']
    TextComponent main_search_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 60
      pos = (0, 150)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Я бы хотел ...\n\n"+instruction
      wrapWidth = 1400
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    KeyboardComponent main_go_search
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent space_instr
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 23
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Как только будете готовы начать, нажмите пробел.
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  Routine test_search_task
    RoutineSettingsComponent test_search_task
      saveStartStop = False
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    CodeComponent test_code
      Code Type = Both
      Before JS Experiment:
        function getRandomSubarray(arr, size) {
            var shuffled = arr.slice(0), i = arr.length, temp, index;
            while (i--) {
                index = Math.floor((i + 1) * Math.random());
                temp = shuffled[index];
                shuffled[index] = shuffled[i];
                shuffled[i] = temp;
            }
            return shuffled.slice(0, size);
        }

        function choose(choices) {
          var index = Math.floor(Math.random() * choices.length);
          return choices[index];
        }

        function ifelse(cond, trueresp, falseresp) {
            if (cond) {return trueresp}
            else {return falseresp}
        }
      Begin Experiment:
        import random
        import pandas as pd

        #Дизайн
        design = '_' + expInfo['group_sk_fl_neu']
        group_sk_fl_neu = expInfo['group_sk_fl_neu']

        #Подгрузить файл с данными стимулов
        df = pd.read_csv('exp_data.csv')


        #Генереация айди проб теста
        train_test_ind_seq = 0

        #выбор имен стимулов для всех проб
        train_order = [18,21,38]

        #тип матрицы
        train_matrix_seq = [1]*3

        #размер иконок в экспе
        if (group_sk_fl_neu != 'neu'):
            size_pix = [112, 112]
        else:
            size_pix = [150, 150]

        #список позиций для картинок 3х3
        positions_3x3 =[]
        for i in range(3):
            for j in range (3):
                positions_3x3.append([-206 + i*206, -206 + j*206])

        #список позиций для картинок 4х4
        positions_4x4 =[]
        for i in range(4):
            for j in range (4):
                positions_4x4.append([-309 + i*206, -309 + j*206])

        #список позиций для картинок 5х5
        positions_5x5 =[]
        for i in range(5):
            for j in range (5):
                positions_5x5.append([-412 + i*206, -412 + j*206])

        #Генереация айди проб
        test_ind_seq = list(range(0,90))

        #выбор имен стимулов для всех проб
        test_order_1 = random.sample(df[df.fav==1]['id'].tolist(), 15)
        test_order_2 = random.sample(df[df.fav==0]['id'].tolist(), 15)
        test_order_3 = random.sample(df[df.fav==1]['id'].tolist(), 15)
        test_order_4 = random.sample(df[df.fav==0]['id'].tolist(), 15)
        test_order_5 = random.sample(df[df.fav==1]['id'].tolist(), 15)
        test_order_6 = random.sample(df[df.fav==0]['id'].tolist(), 15)

        test_order = test_order_1 + test_order_2 + test_order_3 + test_order_4 + test_order_5 + test_order_6

        #тип матрицы
        matrix_seq = [1]*30 + [2]*30 + [3]*30
      Begin JS Experiment:
        //Дизайн
        design = ("_" + expInfo["group_sk_fl_neu"]);
        group_sk_fl_neu = expInfo["group_sk_fl_neu"];

        //Подгрузить файл с данными стимулов
        names = {
            1: 'air', 2: 'antimalware', 3: 'bank', 4: 'book', 5: 'browser', 6: 'calculator', 7: 'calendar', 8: 'camera', 9: 'cancel', 10: 'compass', 11: 'contacts', 12: 'dictaphone', 13: 'documents', 14: 'download', 15: 'editor', 16: 'email', 17: 'files', 18: 'flashlight', 19: 'gallery', 20: 'home', 21: 'like', 22: 'maps', 23: 'messager', 24: 'metro', 25: 'music', 26: 'notebook', 27: 'notification', 28: 'phone', 29: 'planner', 30: 'ruler', 31: 'settings', 32: 'star', 33: 'store', 34: 'taxi', 35: 'time', 36: 'train', 37: 'translator', 38: 'video', 39: 'wallet', 40: 'weather'
        };
        istest = {
            1: 1, 2: 0, 3: 1, 4: 1, 5: 1, 6: 1, 7: 1, 8: 1, 9: 0, 10: 1, 11: 1, 12: 1, 13: 1, 14: 1, 15: 1, 16: 1, 17: 1, 18: 0, 19: 1, 20: 0, 21: 0, 22: 1, 23: 1, 24: 1, 25: 1, 26: 1, 27: 0, 28: 1, 29: 1, 30: 1, 31: 1, 32: 0, 33: 1, 34: 1, 35: 1, 36: 1, 37: 1, 38: 0, 39: 1, 40: 1
        };
        isfav = {
            1: 0, 2: 'NA', 3: 0, 4: 0, 5: 0, 6: 1, 7: 1, 8: 1, 9: 'NA', 10: 0, 11: 1, 12: 0, 13: 0, 14: 0, 15: 0, 16: 1, 17: 0, 18: 'NA', 19: 1, 20: 'NA', 21: 'NA', 22: 1, 23: 1, 24: 0, 25: 1, 26: 1, 27: 'NA', 28: 1, 29: 0, 30: 0, 31: 1, 32: 'NA', 33: 0, 34: 1, 35: 1, 36: 1, 37: 0, 38: 'NA', 39: 0, 40: 1
        };
        isfreq = {
            1: '0', 2: 'NA', 3: '1', 4: '0', 5: '1', 6: '1', 7: '1', 8: '1', 9: 'NA', 10: '0', 11: '0', 12: '0', 13: '0', 14: '0', 15: '0', 16: '1', 17: '1', 18: 'NA', 19: '1', 20: 'NA', 21: 'NA', 22: '1', 23: '1', 24: '0', 25: '1', 26: '0', 27: 'NA', 28: '1', 29: '0', 30: '0', 31: '1', 32: 'NA', 33: '0', 34: '0', 35: '1', 36: '0', 37: '1', 38: 'NA', 39: '0', 40: '1'
        };
        descr_dic = {
            1:'приобрести билеты на самолет',
        2:'проверить устройство на наличие вирусов',
        3:'узнать курс доллара и купить его',
        4:'почитать сохраненную книгу',
        5:'выйти в интернет',
        6:'разделить число на 3',
        7:'узнать на какой день недели выпадает мой день рождения',
        8:'сделать фотоснимок',
        9:'закрыть меню',
        10:'узнать, в какой стороне света Юг',
        11:'найти номер телефона коллеги',
        12:'записать свой голос',
        13:'открыть сохраненные офисные документы',
        14:'открыть скачанный файл',
        15:'отредактировать фото',
        16:'проверить электронную почту',
        17:'открыть файл, хранящийся на устройстве',
        18:'включить фонарик',
        19:'посмотреть сделанные фотографии',
        20:'вернуться на домашнюю страницу',
        21:'поставить лайк',
        22:'узнать, где находится ближайший продуктовый магазин',
        23:'отправить сообщение',
        24:'открыть схему линий метро',
        25:'послушать музыку',
        26:'сделать заметку',
        27:'включить уведомления',
        28:'сделать телефонный звонок',
        29:'создать маркированный список планов на день',
        30:'измерить длину предмета',
        31:'изменить настройки устройства',
        32:'открыть избранные вкладки',
        33:'совершить заказ в продуктовом магазине',
        34:'заказать такси',
        35:'посмотреть, сколько времени во Владивостоке',
        36:'приобрести билеты на поезд',
        37:'перевести текст',
        38:'посмотреть сохраненные видео',
        39:'посмотреть свои скидочные и дебетовые карты',
        40:'узнать погоду на завтра'
        };

        //Генереация айди проб теста
        train_test_ind_seq = 0;

        //выбор имен стимулов для всех проб
        train_order = [18, 21, 38];

        //Тип матрицы
        train_matrix_seq = [1,1,1];

        //размер иконок в экспе
        size_pix = ifelse(group_sk_fl_neu !== 'neu', [0.1037, 0.1037],[0.13889, 0.13889]);

        // List of positions for 3x3 images
        positions_3x3 = [];
        for (let i = 0; i < 3; i++) {
            for (let j = 0; j < 3; j++) {
                positions_3x3.push([-0.19167 + i * 0.19167, -0.19167 + j * 0.19167]);
            }
        }

        // List of positions for 4x4 images
        positions_4x4 = [];
        for (let i = 0; i < 4; i++) {
            for (let j = 0; j < 4; j++) {
                positions_4x4.push([-0.28611 + i * 0.19167, -0.28611 + j * 0.19167]);
            }
        }

        // List of positions for 5x5 images
        positions_5x5 = [];
        for (let i = 0; i < 5; i++) {
            for (let j = 0; j < 5; j++) {
                positions_5x5.push([-0.38148 + i * 0.19167, -0.38148 + j * 0.19167]);
            }
        }

        //Генереация айди проб
        test_ind_seq = Array.apply(null, {length: 90}).map(Number.call, Number);

        //Две группы стимулов
        tested_ids_fav = [6, 7, 8, 11, 16, 19, 22, 23, 25, 26, 28, 31, 34, 35, 36, 40];
        tested_ids_nofav = [1, 3, 4, 5, 10, 12, 13, 14, 15, 17, 24, 29, 30, 33,  37, 39];

        //выбор имен стимулов для всех проб
        test_order_1 = getRandomSubarray(tested_ids_fav, 15);
        test_order_2 = getRandomSubarray(tested_ids_nofav, 15);
        test_order_3 = getRandomSubarray(tested_ids_fav, 15);
        test_order_4 = getRandomSubarray(tested_ids_nofav, 15);
        test_order_5 = getRandomSubarray(tested_ids_fav, 15);
        test_order_6 = getRandomSubarray(tested_ids_nofav, 15);

        test_order = test_order_1.concat(test_order_2, test_order_3, test_order_4, test_order_5, test_order_6);

        //тип матрицы
        matrix_seq = Array.apply(null, Array(30)).map(function(){return 1}).concat(Array.apply(null, Array(30)).map(function(){return 2}),Array.apply(null, Array(30)).map(function(){return 3}));
      Begin JS Routine:
        test = train_order[train_test_ind_seq];
        matrix_type = train_matrix_seq[train_test_ind_seq];
        instruction = descr_dic[test];
      Begin Routine:
        #выбираем целевой стимул
        test = train_order[train_test_ind_seq]
        matrix_type = train_matrix_seq[train_test_ind_seq]
        instruction = df.iloc[test-1]['descr']
    TextComponent test_search_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 60
      pos = (0, 150)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Я бы хотел ...\n\n" + instruction
      wrapWidth = 1400
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    KeyboardComponent test_go_search
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent test_space_instr
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 23
      pos = (0, -300)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Как только будете готовы начать, нажмите пробел.
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  Routine test_trial
    RoutineSettingsComponent test_trial
      saveStartStop = False
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    CodeComponent test_code_trial
      Code Type = Both
      Begin JS Routine:
        //Генерируем список дистракторов из всех стимулов
        probe_list = [2,9,18,20,21,27,32,38];

        index = probe_list.indexOf(test);
        probe_list.splice(index, 1);

        probe_list.push(probe_list[Math.floor(Math.random()*probe_list.length)]);

        //выбираем тип матрицыv и номера дистракторов
        matrix_positions = positions_3x3;
        dist_list = getRandomSubarray(probe_list, 8);

        //Выбираем позицию для целевого стимула
        test_position = choose(matrix_positions);

        //Выбираем оставляем позиции для дистракторов
        dist_position = matrix_positions.slice(0);

        index = dist_position.indexOf(test_position);
        dist_position.splice(index, 1);

        //размеры и файлы
        target_image= 'resources/'+ test.toString() +design+'.png';
        distr1_image= 'resources/'+ dist_list[0].toString() +design+'.png';
        distr2_image= 'resources/'+ dist_list[1].toString() +design+'.png';
        distr3_image= 'resources/'+ dist_list[2].toString() +design+'.png';
        distr4_image= 'resources/'+ dist_list[3].toString() +design+'.png';
        distr5_image= 'resources/'+ dist_list[4].toString() +design+'.png';
        distr6_image= 'resources/'+ dist_list[5].toString() +design+'.png';
        distr7_image= 'resources/'+ dist_list[6].toString() +design+'.png';
        distr8_image= 'resources/'+ dist_list[7].toString() +design+'.png';
      Begin Routine:
        #Генерируем список дистракторов из всех стимулов
        probe_list = df[df.test== 0]['id'].tolist()
        probe_list.remove(test)
        probe_list.append(random.choice(probe_list))

        #выбираем тип матрицыv и номера дистракторов
        matrix_positions = positions_3x3
        dist_list= random.sample(probe_list, 8)

        #Выбираем позицию для целевого стимула
        test_position = random.choice(matrix_positions)

        #Выбираем оставляем позиции для дистракторов
        dist_position = matrix_positions[:]
        dist_position.remove(test_position)
      End JS Routine:
        train_test_ind_seq += 1;
      End Routine:
        #Переходим к слкдующему стимулу
        train_test_ind_seq +=1
    ImageComponent test_target
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $target_image
      pos [set every repeat] = (test_position[0], test_position[1])
      saveStartStop = False
      size = size_pix
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent test_distr_1
      color = 1,1,1
      image [set every repeat] = $distr1_image
      pos [set every repeat] = (dist_position[0][0], dist_position[0][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent test_distr_2
      color = 1,1,1
      image [set every repeat] = $distr2_image
      pos [set every repeat] = (dist_position[1][0], dist_position[1][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent test_distr_3
      color = 1,1,1
      image [set every repeat] = $distr3_image
      pos [set every repeat] = (dist_position[2][0], dist_position[2][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent test_distr_4
      color = 1,1,1
      image [set every repeat] = $distr4_image
      pos [set every repeat] = (dist_position[3][0], dist_position[3][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent test_distr_5
      color = 1,1,1
      image [set every repeat] = $distr5_image
      pos [set every repeat] = (dist_position[4][0], dist_position[4][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent test_distr_6
      color = 1,1,1
      image [set every repeat] = $distr6_image
      pos [set every repeat] = (dist_position[5][0], dist_position[5][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent test_distr_7
      color = 1,1,1
      image [set every repeat] = $distr7_image
      pos [set every repeat] = (dist_position[6][0], dist_position[6][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    ImageComponent test_distr_8
      color = 1,1,1
      image [set every repeat] = $distr8_image
      pos [set every repeat] = (dist_position[7][0], dist_position[7][1])
      saveStartStop = False
      size = size_pix
      startVal [condition] = $matrix_type >= 1
      units = height
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    MouseComponent test_chose_targ
      clickable = test_target, test_distr_1, test_distr_2, test_distr_3, test_distr_4, test_distr_5, test_distr_6, test_distr_7, test_distr_8
      correctAns = test_target
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name, pos
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
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    CodeComponent feed_code
      Code Type = Both
      Begin JS Routine:
        feedback_str = ifelse((test_chose_targ.clicked_name[0] == "test_target"), 'Верно', 'Неверно');
        feedback_colour = ifelse((test_chose_targ.clicked_name[0] == "test_target"), [-1.0000, 0.6784, -1.0000], [1.0000, -1.0000, -1.0000]);
    TextComponent feedback_text
      color [set every repeat] = $feedback_colour
      letterHeight = 60
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $feedback_str
      units = pix
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Flow
  Routine welcome_instr
  Routine test_instr
  LoopInitiator test_loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine test_search_task
    Routine test_trial
    Routine feedback
  LoopTerminator test_loop
  Routine main_instr
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = random
    nReps = 90
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    Routine main_search_task
    Routine main_trial
  LoopTerminator main_loop
  Routine outro
